<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>D:\Spatiotemporal_task\rawdata\sub-002_id-1U\ses-01_date-02072025\tracking\video\T6_1U_02072025.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:PredictPoses">
          <sleap:ModelFileName>frozen_graph.pb</sleap:ModelFileName>
          <sleap:TrainingConfig>confmap_config.json</sleap:TrainingConfig>
          <sleap:CentroidMinConfidence xsi:nil="true" />
          <sleap:PartMinConfidence xsi:nil="true" />
          <sleap:ScaleFactor xsi:nil="true" />
          <sleap:ColorConversion xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\Spatiotemporal_task\derivatives\sub-002_id-1U\ses-01_date-02072025\all_trials\analysis\spatial_behav_data\XY_and_HD\keypoints_uncombined\t6\output.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="cv:FileCapture,sys:String">
        <MemberName>FileName</MemberName>
        <Value>Z:\Eylon\Data\Spatiotemporal_Task\rawdata\sub-002_id-1U\ses-01_date-02072025\tracking\T2_1U_02072025.avi</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>conf</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Expression>it.Count != 0</scr:Expression>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>right_ear</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "right_ear_x")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>right_ear</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "right_ear_y")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>left_ear</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "left_ear_x")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>left_ear</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "left_ear_y")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>snout</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "snout_x")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>snout</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "snout_y")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>center</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "center_x")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>center</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "center_y")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>headcap</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "headcap_x")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>headcap</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>xy</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "headcap_y")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Expression>it.Count == 0</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>add_data_csv_oneitem(xy, "right_ear_x")</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime">
          <py:ScriptPath>C:\Users\Sophia\Downloads\bonsai_script.py</py:ScriptPath>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="2" To="69" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="15" Label="Source1" />
      <Edge From="8" To="21" Label="Source1" />
      <Edge From="8" To="27" Label="Source1" />
      <Edge From="8" To="33" Label="Source1" />
      <Edge From="8" To="39" Label="Source1" />
      <Edge From="8" To="45" Label="Source1" />
      <Edge From="8" To="51" Label="Source1" />
      <Edge From="8" To="57" Label="Source1" />
      <Edge From="8" To="63" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>